opentrons/protocol-designer 5.1.0
schemaVersion: 5
protocolName: EXTRACION RNA OMEGA 48M 21-10-2020
author: HUB AMBIENTAL UPLA
robot: {model: OT-2 Standard}
defaultValues: {aspirate_mmFromBottom: 1, dispense_mmFromBottom: 0.5, touchTip_mmFromTop: -1, blowout_mmFromTop: 0}
pipettes:
  p300_multi_gen2: {mount: left}
modules:
  magneticModuleV2: {slot: 4}
  temperatureModuleV2: {slot: 1}
labware:
  Trash: {definitionId: opentrons/opentrons_1_trash_1100ml_fixed/1, slot: 12}
  Opentrons 96 Filter Tip Rack 200 µL (slot 3): {definitionId: opentrons/opentrons_96_filtertiprack_200ul/1, slot: 3}
  NEST 1 Well Reservoir 195 mL: {definitionId: opentrons/nest_1_reservoir_195ml/1, slot: 11}
  USA Scientific 96 Deep Well Plate 2.4 mL: {definitionId: opentrons/usascientific_96_wellplate_2.4ml_deep/1, slot: magneticModuleV2}
  RNA eluido: {definitionId: opentrons/opentrons_96_aluminumblock_biorad_wellplate_200ul/1, slot: temperatureModuleV2}
  Opentrons 96 Filter Tip Rack 200 µL (slot 6): {definitionId: opentrons/opentrons_96_filtertiprack_200ul/1, slot: 6}
  EB: {definitionId: opentrons/usascientific_12_reservoir_22ml/1, slot: 5}
  Opentrons 96 Filter Tip Rack 200 µL (slot 9): {definitionId: opentrons/opentrons_96_filtertiprack_200ul/1, slot: 9}
  Opentrons 96 Filter Tip Rack 200 µL (slot 2): {definitionId: opentrons/opentrons_96_filtertiprack_200ul/1, slot: 2}
  Opentrons 96 Filter Tip Rack 200 µL (slot 8): {definitionId: opentrons/opentrons_96_filtertiprack_200ul/1, slot: 8}
  Opentrons 96 Filter Tip Rack 200 µL (slot 7): {definitionId: opentrons/opentrons_96_filtertiprack_200ul/1, slot: 7}
  Opentrons 96 Filter Tip Rack 200 µL (slot 10): {definitionId: opentrons/opentrons_96_filtertiprack_200ul/1, slot: 10}
pipetteTiprackAssignments:
  p300_multi_gen2: opentrons/opentrons_96_filtertiprack_200ul/1
ingredients:
  - EtOH 80%: {description: Solución lavado 2, serialize: true}
  - RPM Buffer: {description: Buffer Lavado 1, serialize: true}
  - Binding MasterMix: {description: Mix con beads magnéticas, serialize: true}
  - RNAsa Free Water: {description: Elución, serialize: true}
  - Waste: {description: waste}
ingredLocations:
  NEST 1 Well Reservoir 195 mL:
    Waste {volume: 5000}: A1
  EB:
    RPM Buffer {volume: 21840}: A3
    EtOH 80% {volume: 21840}: A6, A7
    RNAsa Free Water {volume: 4000}: A12
    Binding MasterMix {volume: 17472}: A1
savedStepForms:
- stepType: magnet
  stepName: magnet
  moduleId: magneticModuleV2
  magnetAction: disengage
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi_gen2
  volume: 280
  path: single
  changeTip: always
  aspirate_labware: EB
  aspirate_wells: A1
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  aspirate_mix_checkbox: true
  aspirate_mix_times: 5
  aspirate_mix_volume: 60
  aspirate_mmFromBottom: 3
  aspirate_airGap_checkbox: true
  aspirate_airGap_volume: 20
  dispense_labware: USA Scientific 96 Deep Well Plate 2.4 mL
  dispense_wells: A1-A6
  dispense_mix_checkbox: true
  dispense_mix_times: 10
  dispense_mix_volume: 60
  dispense_mmFromBottom: 5
- stepType: magnet
  stepName: magnet
  moduleId: magneticModuleV2
  magnetAction: engage
  engageHeight: 3.4
- stepType: pause
  stepName: pause
  moduleId: temperatureModuleV2
  pauseAction: untilTime
  pauseMinute: 7
  pauseMessage: Incubar MagBead + Muestra
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi_gen2
  volume: 720
  path: single
  changeTip: perSource
  aspirate_labware: USA Scientific 96 Deep Well Plate 2.4 mL
  aspirate_wells: A1-A6
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  aspirate_mmFromBottom: 3
  aspirate_airGap_checkbox: true
  aspirate_airGap_volume: 20
  dispense_labware: NEST 1 Well Reservoir 195 mL
  dispense_wells: A1
  dispense_mmFromBottom: 10
- stepType: magnet
  stepName: magnet
  moduleId: magneticModuleV2
  magnetAction: disengage
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi_gen2
  volume: 350
  path: single
  changeTip: always
  aspirate_labware: EB
  aspirate_wells: A3
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  aspirate_mix_checkbox: true
  aspirate_mix_times: 3
  aspirate_mix_volume: 60
  aspirate_mmFromBottom: 3
  aspirate_airGap_checkbox: true
  aspirate_airGap_volume: 20
  dispense_labware: USA Scientific 96 Deep Well Plate 2.4 mL
  dispense_wells: A1-A6
  dispense_mix_checkbox: true
  dispense_mix_times: 20
  dispense_mix_volume: 60
  dispense_mmFromBottom: 5
- stepType: magnet
  stepName: magnet
  moduleId: magneticModuleV2
  magnetAction: engage
  engageHeight: 3.4
- stepType: pause
  stepName: pause
  moduleId: temperatureModuleV2
  pauseAction: untilTime
  pauseMinute: 7
  pauseMessage: Incubar MagBead + Muestra
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi_gen2
  volume: 350
  path: single
  changeTip: perSource
  aspirate_labware: USA Scientific 96 Deep Well Plate 2.4 mL
  aspirate_wells: A1-A6
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  aspirate_mmFromBottom: 3
  aspirate_airGap_checkbox: true
  aspirate_airGap_volume: 20
  dispense_labware: NEST 1 Well Reservoir 195 mL
  dispense_wells: A1
  dispense_mmFromBottom: 10
  blowout_checkbox: true
  blowout_location: dest_well
- stepType: magnet
  stepName: magnet
  moduleId: magneticModuleV2
  magnetAction: disengage
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi_gen2
  volume: 350
  path: single
  changeTip: always
  aspirate_labware: EB
  aspirate_wells: A6
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  aspirate_mmFromBottom: 3
  aspirate_airGap_checkbox: true
  aspirate_airGap_volume: 20
  dispense_labware: USA Scientific 96 Deep Well Plate 2.4 mL
  dispense_wells: A1-A6
  dispense_mix_checkbox: true
  dispense_mix_times: 5
  dispense_mix_volume: 60
  dispense_mmFromBottom: 5
  preWetTip: true
- stepType: magnet
  stepName: magnet
  moduleId: magneticModuleV2
  magnetAction: engage
  engageHeight: 3.4
- stepType: pause
  stepName: pause
  moduleId: temperatureModuleV2
  pauseAction: untilTime
  pauseMinute: 7
  pauseMessage: Incubar MagBead + Muestra
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi_gen2
  volume: 350
  path: single
  changeTip: perSource
  aspirate_labware: USA Scientific 96 Deep Well Plate 2.4 mL
  aspirate_wells: A1-A6
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  aspirate_mmFromBottom: 3
  aspirate_airGap_checkbox: true
  aspirate_airGap_volume: 20
  dispense_labware: NEST 1 Well Reservoir 195 mL
  dispense_wells: A1
  dispense_mmFromBottom: 10
  blowout_checkbox: true
  blowout_location: dest_well
- stepType: magnet
  stepName: magnet
  moduleId: magneticModuleV2
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  magnetAction: disengage
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi_gen2
  volume: 350
  path: single
  changeTip: always
  aspirate_labware: EB
  aspirate_wells: A7
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  aspirate_mmFromBottom: 3
  aspirate_airGap_checkbox: true
  aspirate_airGap_volume: 20
  dispense_labware: USA Scientific 96 Deep Well Plate 2.4 mL
  dispense_wells: A1-A6
  dispense_mix_checkbox: true
  dispense_mix_times: 5
  dispense_mix_volume: 60
  dispense_mmFromBottom: 5
- stepType: magnet
  stepName: magnet
  moduleId: magneticModuleV2
  magnetAction: engage
  engageHeight: 3.4
- stepType: pause
  stepName: pause
  moduleId: temperatureModuleV2
  pauseAction: untilTime
  pauseMinute: 7
  pauseMessage: Incubar MagBead + Muestra
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi_gen2
  volume: 350
  path: single
  changeTip: perSource
  aspirate_labware: USA Scientific 96 Deep Well Plate 2.4 mL
  aspirate_wells: A1-A6
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  aspirate_mmFromBottom: 3
  aspirate_airGap_checkbox: true
  aspirate_airGap_volume: 20
  dispense_labware: NEST 1 Well Reservoir 195 mL
  dispense_wells: A1
  dispense_mmFromBottom: 10
  blowout_checkbox: true
  blowout_location: dest_well
- stepType: pause
  stepName: pause
  moduleId: temperatureModuleV2
  pauseAction: untilTime
  pauseMinute: 10
  pauseMessage: SECADO
- stepType: magnet
  stepName: magnet
  moduleId: magneticModuleV2
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  magnetAction: disengage
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi_gen2
  volume: 55
  path: single
  changeTip: always
  aspirate_labware: EB
  aspirate_wells: A12
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  aspirate_mmFromBottom: 3
  aspirate_airGap_checkbox: true
  aspirate_airGap_volume: 20
  dispense_labware: USA Scientific 96 Deep Well Plate 2.4 mL
  dispense_wells: A1-A6
  dispense_mix_checkbox: true
  dispense_mix_times: 10
  dispense_mix_volume: 30
  dispense_mmFromBottom: 5
- stepType: magnet
  stepName: magnet
  moduleId: magneticModuleV2
  magnetAction: engage
  engageHeight: 3.4
- stepType: pause
  stepName: pause
  moduleId: temperatureModuleV2
  pauseAction: untilTime
  pauseMinute: 5
  pauseMessage: INCUBACIÓN PARA ELUCIÓN
labwareDefinitions:
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commands:
- magneticModule/disengageMagnet: {module: magneticModuleV2}
- pickUpTip: {pipette: p300_multi_gen2, labware: Opentrons 96 Filter Tip Rack 200 µL (slot 2), well: A1}
- aspirate: {pipette: p300_multi_gen2, volume: 60, labware: EB, well: A1, offsetFromBottomMm: 3, flowRate: 94}
- dispense: {pipette: p300_multi_gen2, volume: 60, labware: EB, well: A1, offsetFromBottomMm: 3, flowRate: 94}
- aspirate: {pipette: p300_multi_gen2, volume: 60, labware: EB, well: A1, offsetFromBottomMm: 3, flowRate: 94}
- dispense: {pipette: p300_multi_gen2, volume: 60, labware: EB, well: A1, offsetFromBottomMm: 3, flowRate: 94}
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