opentrons/protocol-designer 5.1.0
schemaVersion: 5
protocolName: Elución RNA EA
robot: {model: OT-2 Standard}
defaultValues: {aspirate_mmFromBottom: 1, dispense_mmFromBottom: 0.5, touchTip_mmFromTop: -1, blowout_mmFromTop: 0}
pipettes:
  p300_multi_gen2: {mount: left}
modules:
  magneticModuleV2: {slot: 4}
  temperatureModuleV2: {slot: 1}
labware:
  Trash: {definitionId: opentrons/opentrons_1_trash_1100ml_fixed/1, slot: 12}
  Opentrons 96 Filter Tip Rack 200 µL: {definitionId: opentrons/opentrons_96_filtertiprack_200ul/1, slot: 2}
  NEST 96 Well Plate 100 µL PCR Full Skirt: {definitionId: opentrons/nest_96_wellplate_100ul_pcr_full_skirt/1, slot: temperatureModuleV2}
  USA Scientific 96 Deep Well Plate 2.4 mL: {definitionId: opentrons/usascientific_96_wellplate_2.4ml_deep/1, slot: magneticModuleV2}
pipetteTiprackAssignments:
  p300_multi_gen2: opentrons/opentrons_96_filtertiprack_200ul/1
ingredients:
  - RNA prep
ingredLocations:
  USA Scientific 96 Deep Well Plate 2.4 mL:
    RNA prep {volume: 55}: A1-H1, A2-H2, A3-H3, A4-H4, A5-H5, A6-H6
savedStepForms:
- stepType: magnet
  stepName: magnet
  moduleId: magneticModuleV2
  magnetAction: engage
  engageHeight: 3.4
- stepType: temperature
  stepName: temperature
  moduleId: temperatureModuleV2
  setTemperature: true
  targetTemperature: 4
- stepType: pause
  stepName: pause
  moduleId: temperatureModuleV2
  pauseAction: untilTemperature
  pauseTemperature: 4
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi_gen2
  volume: 50
  path: single
  changeTip: perSource
  aspirate_labware: USA Scientific 96 Deep Well Plate 2.4 mL
  aspirate_wells: A1-A6
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  aspirate_flowRate: 7
  aspirate_mmFromBottom: 2
  aspirate_airGap_checkbox: true
  aspirate_airGap_volume: 20
  dispense_labware: NEST 96 Well Plate 100 µL PCR Full Skirt
  dispense_wells: A1-A6
  dispense_flowRate: 7
  dispense_mmFromBottom: 1.5
- stepType: magnet
  stepName: magnet
  moduleId: magneticModuleV2
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  magnetAction: disengage
- stepType: temperature
  stepName: temperature
  moduleId: temperatureModuleV2
  setTemperature: false
labwareDefinitions:
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commands:
- magneticModule/engageMagnet: {module: magneticModuleV2, engageHeight: 3.4}
- temperatureModule/setTargetTemperature: {module: temperatureModuleV2, temperature: 4}
- temperatureModule/awaitTemperature: {module: temperatureModuleV2, temperature: 4}
- pickUpTip: {pipette: p300_multi_gen2, labware: Opentrons 96 Filter Tip Rack 200 µL, well: A1}
- aspirate: {pipette: p300_multi_gen2, volume: 50, labware: USA Scientific 96 Deep Well Plate 2.4 mL, well: A1, offsetFromBottomMm: 2, flowRate: 7}
- airGap: {pipette: p300_multi_gen2, volume: 20, labware: USA Scientific 96 Deep Well Plate 2.4 mL, well: A1, offsetFromBottomMm: 42.3, flowRate: 7}
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