opentrons/protocol-designer 5.1.0
schemaVersion: 4
protocolName: BGI
robot: {model: OT-2 Standard}
defaultValues: {aspirate_mmFromBottom: 1, dispense_mmFromBottom: 0.5, touchTip_mmFromTop: -1, blowout_mmFromTop: 0}
pipettes:
  p20_single_gen2: {mount: left}
modules:
  temperatureModuleV2: {slot: 3}
labware:
  Trash: {definitionId: opentrons/opentrons_1_trash_1100ml_fixed/1, slot: 12}
  Opentrons 96 Filter Tip Rack 20 µL: {definitionId: opentrons/opentrons_96_filtertiprack_20ul/1, slot: 1}
  Opentrons 24 Tube Rack with Eppendorf 2 mL Safe-Lock Snapcap: {definitionId: opentrons/opentrons_24_tuberack_eppendorf_2ml_safelock_snapcap/1, slot: 2}
  Opentrons 96 Well Aluminum Block with Generic PCR Strip 200 µL: {definitionId: opentrons/opentrons_96_aluminumblock_generic_pcr_strip_200ul/1, slot: temperatureModuleV2}
pipetteTiprackAssignments:
  p20_single_gen2: opentrons/opentrons_96_filtertiprack_20ul/1
ingredients:
  - Mix
ingredLocations:
  Opentrons 24 Tube Rack with Eppendorf 2 mL Safe-Lock Snapcap:
    Mix {volume: 1400}: A1, A2
savedStepForms:
- stepType: temperature
  stepName: temperature
  moduleId: temperatureModuleV2
  setTemperature: true
  targetTemperature: 4
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 28
  path: single
  changeTip: once
  aspirate_labware: Opentrons 24 Tube Rack with Eppendorf 2 mL Safe-Lock Snapcap
  aspirate_wells: A1
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  aspirate_mmFromBottom: 1
  dispense_labware: Opentrons 96 Well Aluminum Block with Generic PCR Strip 200 µL
  dispense_wells: A1-H1
  dispense_mmFromBottom: 0.5
  blowout_checkbox: true
  blowout_location: dest_well
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 28
  path: single
  changeTip: once
  aspirate_labware: Opentrons 24 Tube Rack with Eppendorf 2 mL Safe-Lock Snapcap
  aspirate_wells: A1
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  aspirate_mmFromBottom: 1
  dispense_labware: Opentrons 96 Well Aluminum Block with Generic PCR Strip 200 µL
  dispense_wells: A2-H2
  dispense_mmFromBottom: 0.5
  blowout_checkbox: true
  blowout_location: dest_well
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 28
  path: single
  changeTip: once
  aspirate_labware: Opentrons 24 Tube Rack with Eppendorf 2 mL Safe-Lock Snapcap
  aspirate_wells: A1
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  aspirate_mmFromBottom: 1
  dispense_labware: Opentrons 96 Well Aluminum Block with Generic PCR Strip 200 µL
  dispense_wells: A3-H3
  dispense_mmFromBottom: 0.5
  blowout_checkbox: true
  blowout_location: dest_well
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 28
  path: single
  changeTip: once
  aspirate_labware: Opentrons 24 Tube Rack with Eppendorf 2 mL Safe-Lock Snapcap
  aspirate_wells: A1
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  aspirate_mmFromBottom: 1
  dispense_labware: Opentrons 96 Well Aluminum Block with Generic PCR Strip 200 µL
  dispense_wells: A4-H4
  dispense_mmFromBottom: 0.5
  blowout_checkbox: true
  blowout_location: dest_well
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 28
  path: single
  changeTip: once
  aspirate_labware: Opentrons 24 Tube Rack with Eppendorf 2 mL Safe-Lock Snapcap
  aspirate_wells: A1
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  aspirate_mmFromBottom: 1
  dispense_labware: Opentrons 96 Well Aluminum Block with Generic PCR Strip 200 µL
  dispense_wells: A5-H5
  dispense_mmFromBottom: 0.5
  blowout_checkbox: true
  blowout_location: dest_well
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 28
  path: single
  changeTip: once
  aspirate_labware: Opentrons 24 Tube Rack with Eppendorf 2 mL Safe-Lock Snapcap
  aspirate_wells: A1
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  aspirate_mmFromBottom: 1
  dispense_labware: Opentrons 96 Well Aluminum Block with Generic PCR Strip 200 µL
  dispense_wells: A6-H6
  dispense_mmFromBottom: 0.5
  blowout_checkbox: true
  blowout_location: dest_well
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 28
  path: single
  changeTip: once
  aspirate_labware: Opentrons 24 Tube Rack with Eppendorf 2 mL Safe-Lock Snapcap
  aspirate_wells: A2
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  aspirate_mmFromBottom: 1
  dispense_labware: Opentrons 96 Well Aluminum Block with Generic PCR Strip 200 µL
  dispense_wells: A7-H7
  dispense_mmFromBottom: 0.5
  blowout_checkbox: true
  blowout_location: dest_well
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 28
  path: single
  changeTip: once
  aspirate_labware: Opentrons 24 Tube Rack with Eppendorf 2 mL Safe-Lock Snapcap
  aspirate_wells: A2
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  aspirate_mmFromBottom: 1
  dispense_labware: Opentrons 96 Well Aluminum Block with Generic PCR Strip 200 µL
  dispense_wells: A8-H8
  dispense_mmFromBottom: 0.5
  blowout_checkbox: true
  blowout_location: dest_well
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 28
  path: single
  changeTip: once
  aspirate_labware: Opentrons 24 Tube Rack with Eppendorf 2 mL Safe-Lock Snapcap
  aspirate_wells: A2
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  aspirate_mmFromBottom: 1
  dispense_labware: Opentrons 96 Well Aluminum Block with Generic PCR Strip 200 µL
  dispense_wells: A9-H9
  dispense_mmFromBottom: 0.5
  blowout_checkbox: true
  blowout_location: dest_well
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 28
  path: single
  changeTip: once
  aspirate_labware: Opentrons 24 Tube Rack with Eppendorf 2 mL Safe-Lock Snapcap
  aspirate_wells: A2
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  aspirate_mmFromBottom: 1
  dispense_labware: Opentrons 96 Well Aluminum Block with Generic PCR Strip 200 µL
  dispense_wells: A10-H10
  dispense_mmFromBottom: 0.5
  blowout_checkbox: true
  blowout_location: dest_well
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 28
  path: single
  changeTip: once
  aspirate_labware: Opentrons 24 Tube Rack with Eppendorf 2 mL Safe-Lock Snapcap
  aspirate_wells: A2
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  aspirate_mmFromBottom: 1
  dispense_labware: Opentrons 96 Well Aluminum Block with Generic PCR Strip 200 µL
  dispense_wells: A11-H11
  dispense_mmFromBottom: 0.5
  blowout_checkbox: true
  blowout_location: dest_well
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 28
  path: single
  changeTip: once
  aspirate_labware: Opentrons 24 Tube Rack with Eppendorf 2 mL Safe-Lock Snapcap
  aspirate_wells: A2
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  aspirate_mmFromBottom: 1
  dispense_labware: Opentrons 96 Well Aluminum Block with Generic PCR Strip 200 µL
  dispense_wells: A12-H12
  dispense_mmFromBottom: 0.5
  blowout_checkbox: true
  blowout_location: dest_well
labwareDefinitions:
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commands:
- temperatureModule/setTargetTemperature: {module: temperatureModuleV2, temperature: 4}
- pickUpTip: {pipette: p20_single_gen2, labware: Opentrons 96 Filter Tip Rack 20 µL, well: A1}
- aspirate: {pipette: p20_single_gen2, volume: 20, labware: Opentrons 24 Tube Rack with Eppendorf 2 mL Safe-Lock Snapcap, well: A1, offsetFromBottomMm: 1, flowRate: 3.78}
- dispense: {pipette: p20_single_gen2, volume: 20, labware: Opentrons 96 Well Aluminum Block with Generic PCR Strip 200 µL, well: A1, offsetFromBottomMm: 0.5, flowRate: 3.78}
- blowout: {pipette: p20_single_gen2, labware: Opentrons 96 Well Aluminum Block with Generic PCR Strip 200 µL, well: A1, flowRate: 3.78, offsetFromBottomMm: 20.3}
- aspirate: {pipette: p20_single_gen2, volume: 8, labware: Opentrons 24 Tube Rack with Eppendorf 2 mL Safe-Lock Snapcap, well: A1, offsetFromBottomMm: 1, flowRate: 3.78}
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