opentrons/protocol-designer 5.0.2
schemaVersion: 3
protocolName: BGI_plus RNA
robot: {model: OT-2 Standard}
defaultValues: {aspirate_mmFromBottom: 1, dispense_mmFromBottom: 0.5, touchTip_mmFromTop: -1, blowout_mmFromTop: 0}
pipettes:
  p20_single_gen2: {mount: left}
labware:
  Trash: {definitionId: opentrons/opentrons_1_trash_1100ml_fixed/1, slot: 12}
  Opentrons 96 Filter Tip Rack 20 µL (slot 1): {definitionId: opentrons/opentrons_96_filtertiprack_20ul/1, slot: 1}
  Opentrons 24 Tube Rack with Eppendorf 2 mL Safe-Lock Snapcap: {definitionId: opentrons/opentrons_24_tuberack_eppendorf_2ml_safelock_snapcap/1, slot: 2}
  Opentrons 96 Well Aluminum Block with Generic PCR Strip 200 µL: {definitionId: opentrons/opentrons_96_aluminumblock_generic_pcr_strip_200ul/1, slot: 3}
  NEST 96 Deepwell Plate 2mL: {definitionId: opentrons/nest_96_wellplate_2ml_deep/1, slot: 6}
  Opentrons 96 Filter Tip Rack 20 µL (slot 5): {definitionId: opentrons/opentrons_96_filtertiprack_20ul/1, slot: 5}
pipetteTiprackAssignments:
  p20_single_gen2: opentrons/opentrons_96_filtertiprack_20ul/1
ingredients:
  - Mix
  - RNA
ingredLocations:
  Opentrons 24 Tube Rack with Eppendorf 2 mL Safe-Lock Snapcap:
    Mix {volume: 1400}: A1, A2
  NEST 96 Deepwell Plate 2mL:
    RNA {volume: 50}: A1-H1, A2-H2, A3-H3, A4-H4, A5-H5, A6-H6, A7-H7, A8-H8, A9-H9, A10-H10, A11-H11, A12-H12
savedStepForms:
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 28
  path: single
  changeTip: once
  aspirate_labware: Opentrons 24 Tube Rack with Eppendorf 2 mL Safe-Lock Snapcap
  aspirate_wells: A1
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  aspirate_mmFromBottom: 1
  dispense_labware: Opentrons 96 Well Aluminum Block with Generic PCR Strip 200 µL
  dispense_wells: A1-H1, A2-H2, A3-H3, A4-H4, A5-H5, A6-H6
  dispense_mmFromBottom: 0.5
  blowout_checkbox: true
  blowout_location: dest_well
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 28
  path: single
  changeTip: once
  aspirate_labware: Opentrons 24 Tube Rack with Eppendorf 2 mL Safe-Lock Snapcap
  aspirate_wells: A2
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  aspirate_mmFromBottom: 1
  dispense_labware: Opentrons 96 Well Aluminum Block with Generic PCR Strip 200 µL
  dispense_wells: A7-H7, A8-H8, A9-H9, A10-H10, A11-H11, A12-H12
  dispense_mmFromBottom: 0.5
  blowout_checkbox: true
  blowout_location: dest_well
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 2
  path: single
  changeTip: always
  aspirate_labware: NEST 96 Deepwell Plate 2mL
  aspirate_wells: A1-H1, A2-H2, A3-H3, A4-H4, A5-H5, A6-H6, A7-H7, A8-H8, A9-H9, A10-H10, A11-H11, A12-H12
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  aspirate_mmFromBottom: 1
  dispense_labware: Opentrons 96 Well Aluminum Block with Generic PCR Strip 200 µL
  dispense_wells: A1-H1, A2-H2, A3-H3, A4-H4, A5-H5, A6-H6, A7-H7, A8-H8, A9-H9, A10-H10, A11-H11, A12-H12
  dispense_mix_checkbox: true
  dispense_mix_times: 2
  dispense_mix_volume: 10
  dispense_mmFromBottom: 0.5
  blowout_checkbox: true
  blowout_location: dest_well
labwareDefinitions:
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commands:
- pickUpTip: {pipette: p20_single_gen2, labware: Opentrons 96 Filter Tip Rack 20 µL (slot 1), well: A1}
- aspirate: {pipette: p20_single_gen2, volume: 20, labware: Opentrons 24 Tube Rack with Eppendorf 2 mL Safe-Lock Snapcap, well: A1, offsetFromBottomMm: 1, flowRate: 3.78}
- dispense: {pipette: p20_single_gen2, volume: 20, labware: Opentrons 96 Well Aluminum Block with Generic PCR Strip 200 µL, well: A1, offsetFromBottomMm: 0.5, flowRate: 3.78}
- blowout: {pipette: p20_single_gen2, labware: Opentrons 96 Well Aluminum Block with Generic PCR Strip 200 µL, well: A1, flowRate: 3.78, offsetFromBottomMm: 20.3}
- aspirate: {pipette: p20_single_gen2, volume: 8, labware: Opentrons 24 Tube Rack with Eppendorf 2 mL Safe-Lock Snapcap, well: A1, offsetFromBottomMm: 1, flowRate: 3.78}
- dispense: {pipette: p20_single_gen2, volume: 8, labware: Opentrons 96 Well Aluminum Block with Generic PCR Strip 200 µL, well: A1, offsetFromBottomMm: 0.5, flowRate: 3.78}
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