opentrons/protocol-designer 5.1.0
schemaVersion: 4
protocolName: Carga 2uL BGI_QS3 07Oct 
author: FAVE
robot: {model: OT-2 Standard}
defaultValues: {aspirate_mmFromBottom: 1, dispense_mmFromBottom: 0.5, touchTip_mmFromTop: -1, blowout_mmFromTop: 0}
pipettes:
  p20_multi_gen2: {mount: left}
modules:
  temperatureModuleV2: {slot: 4}
labware:
  Trash: {definitionId: opentrons/opentrons_1_trash_1100ml_fixed/1, slot: 12}
  Opentrons 96 Filter Tip Rack 20 µL: {definitionId: opentrons/opentrons_96_filtertiprack_20ul/1, slot: 6}
  (Retired) Opentrons 96 Well Aluminum Block with Bio-Rad Well Plate 200 µL: {definitionId: opentrons/opentrons_96_aluminumblock_biorad_wellplate_200ul/1, slot: temperatureModuleV2}
  NEST 96 Well Plate 200 µL Flat: {definitionId: opentrons/nest_96_wellplate_200ul_flat/1, slot: 5}
pipetteTiprackAssignments:
  p20_multi_gen2: opentrons/opentrons_96_filtertiprack_20ul/1
ingredients:
  - Sample
  - mix
ingredLocations:
  NEST 96 Well Plate 200 µL Flat:
    Sample {volume: 50}: A1-H1, A2-H2, A3-H3, A4-H4, A5-H5, A6-H6, A7-H7, A8-H8, A9-H9, A10-H10, A11-H11, A12-H12
  (Retired) Opentrons 96 Well Aluminum Block with Bio-Rad Well Plate 200 µL:
    mix {volume: 28}: A1-H1, A2-H2, A3-H3, A4-H4, A5-H5, A6-H6, A7-H7, A8-H8, A9-H9, A10-H10, A11-H11, A12-H12
savedStepForms:
- stepType: temperature
  stepName: temperature
  moduleId: temperatureModuleV2
  setTemperature: true
  targetTemperature: 4
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_multi_gen2
  volume: 2
  path: single
  changeTip: always
  aspirate_labware: NEST 96 Well Plate 200 µL Flat
  aspirate_wells: A1-A12
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  aspirate_mmFromBottom: 1
  dispense_labware: (Retired) Opentrons 96 Well Aluminum Block with Bio-Rad Well Plate 200 µL
  dispense_wells: A1-A12
  dispense_flowRate: 3.2
  dispense_mix_checkbox: true
  dispense_mix_times: 2
  dispense_mix_volume: 10
  dispense_mmFromBottom: 0.5
- stepType: temperature
  stepName: temperature
  moduleId: temperatureModuleV2
  setTemperature: false
labwareDefinitions:
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commands:
- temperatureModule/setTargetTemperature: {module: temperatureModuleV2, temperature: 4}
- pickUpTip: {pipette: p20_multi_gen2, labware: Opentrons 96 Filter Tip Rack 20 µL, well: A1}
- aspirate: {pipette: p20_multi_gen2, volume: 2, labware: NEST 96 Well Plate 200 µL Flat, well: A1, offsetFromBottomMm: 1, flowRate: 7.6}
- dispense: {pipette: p20_multi_gen2, volume: 2, labware: (Retired) Opentrons 96 Well Aluminum Block with Bio-Rad Well Plate 200 µL, well: A1, offsetFromBottomMm: 0.5, flowRate: 3.2}
- aspirate: {pipette: p20_multi_gen2, volume: 10, labware: (Retired) Opentrons 96 Well Aluminum Block with Bio-Rad Well Plate 200 µL, well: A1, offsetFromBottomMm: 0.5, flowRate: 7.6}
- dispense: {pipette: p20_multi_gen2, volume: 10, labware: (Retired) Opentrons 96 Well Aluminum Block with Bio-Rad Well Plate 200 µL, well: A1, offsetFromBottomMm: 0.5, flowRate: 3.2}
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