opentrons/protocol-designer 5.0.2
schemaVersion: 3
protocolName: Dilución seriada sueros (24 muestras)
author: Lab ViroCelMol
description: Protocolo para realizar diluciones seriadas de 24 sueros con 8 puntos de dilucion. La primera dilución de suero de 1:20 debe realizarse manualmente en campana.
robot: {model: OT-2 Standard}
defaultValues: {aspirate_mmFromBottom: 1, dispense_mmFromBottom: 0.5, touchTip_mmFromTop: -1, blowout_mmFromTop: 0}
pipettes:
  p300_multi_gen2: {mount: left}
labware:
  Trash: {definitionId: opentrons/opentrons_1_trash_1100ml_fixed/1, slot: 12}
  NEST 96 Deepwell Plate 2mL: {definitionId: opentrons/nest_96_wellplate_2ml_deep/1, slot: 8}
  NEST 96 Deepwell Plate 2mL (1): {definitionId: opentrons/nest_96_wellplate_2ml_deep/1, slot: 5}
  USA Scientific 12 Well Reservoir 22 mL: {definitionId: opentrons/usascientific_12_reservoir_22ml/1, slot: 7}
  Opentrons 96 Tip Rack 300 µL: {definitionId: opentrons/opentrons_96_tiprack_300ul/1, slot: 4}
pipetteTiprackAssignments:
  p300_multi_gen2: opentrons/opentrons_96_tiprack_300ul/1
ingredients:
  - Sample: {description: Sueros}
  - Medio: {description: DMEM}
ingredLocations:
  NEST 96 Deepwell Plate 2mL (1):
    Sample {volume: 400}: A1-H1
  NEST 96 Deepwell Plate 2mL:
    Sample {volume: 400}: A1-H1, A9-H9
  USA Scientific 12 Well Reservoir 22 mL:
    Medio {volume: 20000}: A1, A2
savedStepForms:
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi_gen2
  volume: 200
  path: single
  changeTip: once
  aspirate_labware: USA Scientific 12 Well Reservoir 22 mL
  aspirate_wells: A1
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  aspirate_mmFromBottom: 1
  dispense_labware: NEST 96 Deepwell Plate 2mL
  dispense_wells: A2-A8, A10-A12
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi_gen2
  volume: 200
  path: single
  changeTip: once
  aspirate_labware: USA Scientific 12 Well Reservoir 22 mL
  aspirate_wells: A2
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  aspirate_mmFromBottom: 1
  dispense_labware: NEST 96 Deepwell Plate 2mL (1)
  dispense_wells: A2-A12
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi_gen2
  volume: 100
  path: single
  changeTip: once
  aspirate_labware: NEST 96 Deepwell Plate 2mL
  aspirate_wells: A1-A7
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  aspirate_mmFromBottom: 1
  dispense_labware: NEST 96 Deepwell Plate 2mL
  dispense_wells: A2-A8
  dispense_flowRate: 50
  dispense_mix_checkbox: true
  dispense_mix_times: 6
  dispense_mix_volume: 100
  dispense_mmFromBottom: 0.5
  blowout_checkbox: true
  blowout_location: dest_well
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi_gen2
  volume: 100
  path: single
  changeTip: once
  aspirate_labware: NEST 96 Deepwell Plate 2mL (1)
  aspirate_wells: A1-A7
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  aspirate_mmFromBottom: 1
  dispense_labware: NEST 96 Deepwell Plate 2mL (1)
  dispense_wells: A2-A8
  dispense_flowRate: 50
  dispense_mix_checkbox: true
  dispense_mix_times: 6
  dispense_mix_volume: 100
  dispense_mmFromBottom: 0.5
  blowout_checkbox: true
  blowout_location: dest_well
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi_gen2
  volume: 100
  path: single
  changeTip: once
  aspirate_labware: NEST 96 Deepwell Plate 2mL
  aspirate_wells: A9-A11
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  aspirate_mmFromBottom: 1
  dispense_labware: NEST 96 Deepwell Plate 2mL
  dispense_wells: A10-A12
  dispense_flowRate: 50
  dispense_mix_checkbox: true
  dispense_mix_times: 6
  dispense_mix_volume: 100
  dispense_mmFromBottom: 0.5
  blowout_checkbox: true
  blowout_location: dest_well
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi_gen2
  volume: 100
  path: single
  changeTip: never
  aspirate_labware: NEST 96 Deepwell Plate 2mL
  aspirate_wells: A12
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  aspirate_mmFromBottom: 1
  dispense_labware: NEST 96 Deepwell Plate 2mL (1)
  dispense_wells: A9
  dispense_flowRate: 50
  dispense_mix_checkbox: true
  dispense_mix_times: 6
  dispense_mix_volume: 100
  dispense_mmFromBottom: 0.5
  blowout_checkbox: true
  blowout_location: dest_well
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi_gen2
  volume: 100
  path: single
  changeTip: never
  aspirate_labware: NEST 96 Deepwell Plate 2mL (1)
  aspirate_wells: A9-A11
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  aspirate_mmFromBottom: 1
  dispense_labware: NEST 96 Deepwell Plate 2mL (1)
  dispense_wells: A10-A12
  dispense_flowRate: 50
  dispense_mix_checkbox: true
  dispense_mix_times: 6
  dispense_mix_volume: 100
  dispense_mmFromBottom: 0.5
  blowout_checkbox: true
  blowout_location: dest_well
labwareDefinitions:
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commands:
- pickUpTip: {pipette: p300_multi_gen2, labware: Opentrons 96 Tip Rack 300 µL, well: A1}
- aspirate: {pipette: p300_multi_gen2, volume: 200, labware: USA Scientific 12 Well Reservoir 22 mL, well: A1, offsetFromBottomMm: 1, flowRate: 94}
- dispense: {pipette: p300_multi_gen2, volume: 200, labware: NEST 96 Deepwell Plate 2mL, well: A2, offsetFromBottomMm: 0.5, flowRate: 94}
- aspirate: {pipette: p300_multi_gen2, volume: 200, labware: USA Scientific 12 Well Reservoir 22 mL, well: A1, offsetFromBottomMm: 1, flowRate: 94}
- dispense: {pipette: p300_multi_gen2, volume: 200, labware: NEST 96 Deepwell Plate 2mL, well: A3, offsetFromBottomMm: 0.5, flowRate: 94}
- aspirate: {pipette: p300_multi_gen2, volume: 200, labware: USA Scientific 12 Well Reservoir 22 mL, well: A1, offsetFromBottomMm: 1, flowRate: 94}
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